PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Intentional Binding
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon_2
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine beep
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    SoundComponent sound_beep
      forceEndRoutine = False
      sound [set every repeat] = $frequency
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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  Routine responses
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Report the delay between the key press and the beep sound on a scale (0-999). Click submit after entering the value
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Submit
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  Routine Goodbye_Screen
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for participating in the experiment
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  Routine Welcome__screen
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Welcome to an Intentional Binding task!

        in this experiment you will be presented with a white circle which will turn green, when the circle turns green, you are requested to press the spacebar. After pressing the space bar you will hear a sound, the goal is that when you hear the sound you have to estimate the delay between the key press and the sound presentation on a scale of 0-999.
Flow
  Routine Welcome__screen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 34
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    conditions:
      [{'delay': 0.1, 'frequency': 400, 'condition': 'unexp'},
      {'delay': 0.4, 'frequency': 400, 'condition': 'unexp'},
      {'delay': 0.7, 'frequency': 400, 'condition': 'unexp'},
      {'delay': 0.1, 'frequency': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'frequency': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'frequency': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'frequency': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'frequency': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'frequency': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'frequency': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'frequency': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'frequency': 1000, 'condition': 'exp'}]
    Routine trial
    Routine beep
    Routine responses
  LoopTerminator trials
  Routine Goodbye_Screen
