PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Motor Sequence Learning
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation_polygon
      fillColor = white
      shape = cross
      size = (10,10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent l1_polygon
      fillColor = white
      ori = 90
      pos = (-150,0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent l2_plygon
      fillColor = white
      ori = 90
      pos = (-50,0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent l3_polygon
      fillColor = white
      ori = 90
      pos = (50,0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent l4_polygon
      fillColor = white
      ori = 90
      pos = (150,0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe_polygon
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10,10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine random_trials
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    PolygonComponent fixation_polygon_2
      fillColor = white
      shape = cross
      size = (10,10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent l1_polygon_2
      fillColor = white
      ori = 90
      pos = (-150,0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent l2_plygon_2
      fillColor = white
      ori = 90
      pos = (-50,0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent l3_polygon_2
      fillColor = white
      ori = 90
      pos = (50,0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent l4_polygon_2
      fillColor = white
      ori = 90
      pos = (150,0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe_polygon_2
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10,10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp_2
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine Welcome_Screen
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Welcome to a Motor Sequence Learning Experiment!

        In this experiment you have to choose between 4 keyboard responses-'Z','X','C','V'. In the experiment you will observe 4 rectanngular columns and one small triangle on one of these columns in each trial of the experiment. Your goal is to press the letter according to the appearance of the triangle on the column. For example, if the triangle appears on the left most column press 'Z', if it is on rightmost column then press 'V'.
  Routine Goodbye_Screen
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    TextComponent goodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for participating in this experiment!
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Flow
  Routine Welcome_Screen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = seq_conditions.csv
    loopType = sequential
    nReps = 50
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    conditions:
      [OrderedDict([('pos', np.int64(-50)), ('corr_resp', 'x')]),
      OrderedDict([('pos', np.int64(150)), ('corr_resp', 'v')]),
      OrderedDict([('pos', np.int64(50)), ('corr_resp', 'c')]),
      OrderedDict([('pos', np.int64(-150)), ('corr_resp', 'z')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = seq_conditions.csv
    loopType = fullRandom
    nReps = 50
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    conditions:
      [OrderedDict([('pos', np.int64(-50)), ('corr_resp', 'x')]),
      OrderedDict([('pos', np.int64(150)), ('corr_resp', 'v')]),
      OrderedDict([('pos', np.int64(50)), ('corr_resp', 'c')]),
      OrderedDict([('pos', np.int64(-150)), ('corr_resp', 'z')])]
    Routine random_trials
  LoopTerminator trials_3
  Routine Goodbye_Screen
