PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Orientation Discrimination
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:

            if random() > 0.5:
                tilt = randint(1,5)
                corrAns = 'down'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
      End Routine:
        trials.addData('tilt',tilt)

        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:

            if random() > 0.5:
                tilt = randint(1,5)
                corrAns = 'down'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
    PolygonComponent Fixation
      fillColor = white
      shape = triangle
      size = (10,10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    GratingComponent Stimulus
      contrast = 0.3
      mask = gauss
      ori [set every repeat] = tilt
      saveStartStop = False
      sf = 7
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 10
      tex = sin
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    KeyboardComponent key_resp_stimuli
      allowedKeys = 'up','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine Welcome_Screen
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    TextComponent Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Welcome to an Orientation Discrimination Experiment!

        In this experiment you have two press the up arrow key if you think that the stimulus being presented is vertical then press the upward arrow and if you think it has any other direction/ tilt then press the downward arrow
  Routine Goodbye_Screen
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    TextComponent Bye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for participating in the experiment!
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Flow
  Routine Welcome_Screen
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
  Routine Goodbye_Screen
