PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Solo project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    CodeComponent distractor_code
      Code Type = Auto->JS
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      Begin Routine:
        import string, random

        # Decide distractor amount
        num_distr = 10 if random.random() > 0.5 else 0

        # Log in data
        distractor_present = 1 if num_distr > 0 else 0
        thisExp.addData('distractor_present', distractor_present)
        thisExp.addData('num_distr', num_distr)

        letters = list(string.ascii_uppercase)

        distractors = []
        for i in range(num_distr):

            # random position away from center (memory area)
            while True:
                x = random.uniform(-0.7, 0.7)
                y = random.uniform(-0.4, 0.4)
                if not (-0.2 < y < 0.2):
                    break

            stim = visual.TextStim(
                win,
                text=random.choice(letters),
                pos=(x, y),
                height=0.10,
                color='white'
            )
            distractors.append(stim)
      Each Frame:
        if probe_text.status == STARTED:
            for d in distractors:
                d.draw()
      End Routine:
        # Stop drawing distractors
        for d in distractors:
            d.setAutoDraw(False)
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.10, 0.10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent probe_text
      letterHeight = 0.10
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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      text [set every repeat]:
        $memory_set
    TextComponent isi
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.5
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    TextComponent response_text
      letterHeight = 0.05
      startVal [time (s)] = 3.5
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      text [set every repeat]:
        $"Was this digit " + str(probe_digit) + " present in the numbers presented before? "
        "Please press 'y' for yes and 'n' for no"
    KeyboardComponent key_resp_probe
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
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  Routine Welcome_Screen
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        In this experiment you will be presented with a set of numbers and after that you will be presented with a single digit and you have to press 'y' if the number if the digit was present in the set of numbers and 'n' if the number was not presented.

        Please press the spacebar when you are ready!

        If you have any questions, please ask!

        All the best!!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Goodbye_Screen
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank You for Participating!
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Flow
  Routine Welcome_Screen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'memory_set': 198663, 'corr_ans': 'no', 'probe_digit': 4, 'distractor_level': 'no'},
      {'memory_set': 631965, 'corr_ans': 'no', 'probe_digit': 2, 'distractor_level': 'high'},
      {'memory_set': 561304, 'corr_ans': 'no', 'probe_digit': 7, 'distractor_level': 'low'},
      {'memory_set': 294906, 'corr_ans': 'yes', 'probe_digit': 2, 'distractor_level': 'no'},
      {'memory_set': 548461, 'corr_ans': 'no', 'probe_digit': 9, 'distractor_level': 'high'},
      {'memory_set': 943478, 'corr_ans': 'no', 'probe_digit': 2, 'distractor_level': 'low'},
      {'memory_set': 662798, 'corr_ans': 'no', 'probe_digit': 0, 'distractor_level': 'no'},
      {'memory_set': 279161, 'corr_ans': 'yes', 'probe_digit': 1, 'distractor_level': 'high'},
      {'memory_set': 811320, 'corr_ans': 'no', 'probe_digit': 6, 'distractor_level': 'low'},
      {'memory_set': 862476, 'corr_ans': 'no', 'probe_digit': 3, 'distractor_level': 'no'},
      {'memory_set': 849594, 'corr_ans': 'no', 'probe_digit': 7, 'distractor_level': 'high'},
      {'memory_set': 359291, 'corr_ans': 'yes', 'probe_digit': 3, 'distractor_level': 'low'},
      {'memory_set': 337647, 'corr_ans': 'yes', 'probe_digit': 4, 'distractor_level': 'no'},
      {'memory_set': 117161, 'corr_ans': 'yes', 'probe_digit': 1, 'distractor_level': 'high'},
      {'memory_set': 299855, 'corr_ans': 'yes', 'probe_digit': 5, 'distractor_level': 'low'},
      {'memory_set': 217239, 'corr_ans': 'yes', 'probe_digit': 2, 'distractor_level': 'no'},
      {'memory_set': 610509, 'corr_ans': 'yes', 'probe_digit': 6, 'distractor_level': 'high'}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
    Routine trial
  LoopTerminator trials
  Routine Goodbye_Screen
