PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Stroop task
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent fixation_polygon
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent Stroop_text
      color [set every repeat] = $Colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      text [set every repeat] = $Word
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    KeyboardComponent key_resp
      allowedKeys = 'b','r'
      correctAns = $Corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instruction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Welcome to the Stroop task

        Your task in this experiment is to respond to the colour of the word and not to the word itself, please respond to the ink/colour that you observed in the text.

        If the colour is red please press 'r' and if it is blue please press 'b'
  Routine Thank_you
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you!
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stroop_condition.xlsx
    loopType = random
    nReps = 25
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    conditions:
      [{'Word': 'RED', 'Colour': 'red', 'stim_condition': 'C', 'Corr_resp': 'r'},
      {'Word': 'RED', 'Colour': 'blue', 'stim_condition': 'I', 'Corr_resp': 'b'},
      {'Word': 'BLUE', 'Colour': 'blue', 'stim_condition': 'C', 'Corr_resp': 'b'},
      {'Word': 'BLUE', 'Colour': 'red', 'stim_condition': 'I', 'Corr_resp': 'r'}]
    Routine trial
  LoopTerminator trials
  Routine Thank_you
