PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Word Priming Task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Study_Phase
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent Studyslider
      font = Times New Roman
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.04
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Test_Phase
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0,-0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent test_mouse
      clickable = $submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Welcome_Screen
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Welcome to the Experiment!

        This is a word priming experiment. In this experiment you will be presented with a list of words and you will have to rate if you are familiar or unfamiliar with the word being presented. Following this you will have to complete a word fragmentation task.
  Routine Goodbye_Screen
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank You for Participating in the Experiment!
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Flow
  Routine Welcome_Screen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Study_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Study_word', 'book')]),
      OrderedDict([('Study_word', 'cushion')]),
      OrderedDict([('Study_word', 'phone')]),
      OrderedDict([('Study_word', 'marble')]),
      OrderedDict([('Study_word', 'board')]),
      OrderedDict([('Study_word', 'Laptop')]),
      OrderedDict([('Study_word', 'Chart')]),
      OrderedDict([('Study_word', 'T-shirt')]),
      OrderedDict([('Study_word', 'mouse')]),
      OrderedDict([('Study_word', 'Pastry')]),
      OrderedDict([('Study_word', 'Case')]),
      OrderedDict([('Study_word', 'Cruise')]),
      OrderedDict([('Study_word', 'Police')]),
      OrderedDict([('Study_word', 'Keys')]),
      OrderedDict([('Study_word', 'Poster')])]
    Routine Study_Phase
  LoopTerminator trials
  LoopInitiator test_trials loopType="TrialHandler"
    conditionsFile = test_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test_word', 'l_pt_p'), ('Reference', 'Laptop'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ha_t'), ('Reference', 'Chart'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'T_hi_t'), ('Reference', 'Tshirt'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ou_se'), ('Reference', 'mouse'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'P_s_r_'), ('Reference', 'Pastry'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'c_s_'), ('Reference', 'Case'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ru_s_'), ('Reference', 'Cruise'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'P_li_e'), ('Reference', 'Police'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'k_y_'), ('Reference', 'keys'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'P_st_r'), ('Reference', 'Poster'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_o_rd'), ('Reference', 'Board'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_a_bl_'), ('Reference', 'Marble'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ho_e'), ('Reference', 'Phone'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_oo_'), ('Reference', 'Book'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'c_s_io_'), ('Reference', 'Cushion'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'ta_l_'), ('Reference', 'Table'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'p_nc_l'), ('Reference', 'Pencil'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'v_s_'), ('Reference', 'vase'), ('old_new', 'new')])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
    Routine Test_Phase
  LoopTerminator test_trials
  Routine Goodbye_Screen
